CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):17,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.1
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Phalloidin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
IdentifySecondaryObjects:[module_num:7|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:YapExpression
    Select the method to identify the secondary objects:Propagation
    Select the input image:HSPA1A
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredYAP1
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:(0.0, 1.0)
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:8|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enabled:False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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:DAPI, Phalloidin
    Select objects to measure:Cells, FilteredNuclei, Nuclei

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:FilteredNuclei, Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

CalculateMath:[module_num:11|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enabled:False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
    Name the output measurement:HSPA1A_intensitymesurement
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_HSPA1A
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_HSPA1A
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureObjectIntensity:[module_num:12|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enabled:False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
    Select images to measure:DAPI, Phalloidin, HSPA1A
    Select objects to measure:FilteredNuclei, Cells

MeasureColocalization:[module_num:13|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enabled:False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
    Select images to measure:DAPI, HSPA1A
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei
    Run all metrics?:Accurate
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:Yes
    Method for Costes thresholding:Fast

DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Phalloidin
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:FilteredNuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:DAPI
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage2
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DisplayImage
    Name the output image:OverlayImage
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:FilteredNuclei
    Select outline color:Green
    Select objects to display:Cells

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DisplayImage2
    Name the output image:OverlayImage2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:FilteredNuclei
    Select outline color:Green
    Select objects to display:Cells

RescaleIntensity:[module_num:18|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
    Select the input image:OverlayImage
    Name the output image:RescaledOverlayImage
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:OverlayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Input Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:OverlayImage2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:FilteredNuclei|AreaShape_Zernike_4_0,FilteredNuclei|AreaShape_Zernike_4_2,FilteredNuclei|AreaShape_Zernike_4_4,FilteredNuclei|AreaShape_Zernike_7_7,FilteredNuclei|AreaShape_Zernike_7_1,FilteredNuclei|AreaShape_Zernike_7_3,FilteredNuclei|AreaShape_Zernike_7_5,FilteredNuclei|AreaShape_Zernike_0_0,FilteredNuclei|AreaShape_Zernike_5_3,FilteredNuclei|AreaShape_Zernike_5_5,FilteredNuclei|AreaShape_Zernike_5_1,FilteredNuclei|AreaShape_Zernike_1_1,FilteredNuclei|AreaShape_Zernike_6_2,FilteredNuclei|AreaShape_Zernike_6_6,FilteredNuclei|AreaShape_Zernike_6_4,FilteredNuclei|AreaShape_Zernike_6_0,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FilteredNuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
