CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:Vinculin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:Vinculin
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:100
    Feature type:Speckles
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    Speed and accuracy:Slow
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
CorrectIlluminationCalculate:[module_num:6|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enabled:False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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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enabled:False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
    Select the input image:IllumBlue
    Name the output image:CorrBlue
    Select the illumination function:Vinculin
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Threshold:[module_num:8|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enabled:False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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:9|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enabled:False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
    Select the input image:Threshold
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:VinculinStaining
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:EnhanceOrSuppressFeatures, Vinculin
    Select objects to measure:VinculinStaining

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:VinculinStaining
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:VinculinStaining
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:EnhanceOrSuppressFeatures
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DisplayImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:VinculinStaining

RescaleIntensity:[module_num:15|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enabled:False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
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Vinculin
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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